PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data filename = u'SemSimJudg_data/%s_%s_%s' % (expInfo['Subject_ID'], expName, expInfo['date'])
  Experiment info = {'Subject_ID': 'MCI'}
  Full-screen window = False
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1200]
  expName = SemSimJudg
  keyboardBackend = PsychToolbox
  runMode = 1
  rush = True
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Routines
  Routine Welcome
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    TextComponent welcomeText
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the study

        Press 'K' for left
        Press 'L' for right

        Press SPACE to start the task
    KeyboardComponent welcomeEndKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions
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    TextComponent instrucText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        For left, press 'K'
        For right, press 'L'

        Press SPACE to start
    KeyboardComponent instrucEndKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Ready
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    TextComponent getReadyText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Place your fingers on the keys

        When you are ready, press SPACE to start
    KeyboardComponent getReadyEndKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Thank_You
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    TextComponent Thanks_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        All done!

        Thank you for completing the task
  Routine Fixation
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    TextComponent initFixText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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  Routine Fixation2s
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  Routine Fixation2
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    TextComponent breakFixText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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    CodeComponent breakFixCheck
      Code Type = Py
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      Begin Experiment:
        breakFixationStart = False
      Begin Routine:
        if not breakFixationStart:
            continueRoutine = False  # Skip the fixation if it's not time
        else:
            # Reset lists for next block
            response_times = []
            accuracy = []
      End Routine:
        breakFixationStart = False
  Routine FB
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = $fb_temp
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  Routine Priming
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    CodeComponent breakTrigger
      Code Type = Py
      Begin Routine:
        # Schedule a break after this trial
        if (trials.thisN + 1) % 20 == 0:
            breakRoutineStart = True
            if trials.thisN + 1 != len(trials.trialList):
                breakFixationStart = True
    TextComponent FixCross
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every repeat] = +
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    TextComponent Target_text
      letterHeight = 0.05
      pos = (0, 0.07)
      startVal [time (s)] = 1
      text [set every repeat] = $Target
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    TextComponent LeftWord
      letterHeight = 0.05
      pos = (-0.13, -0.07)
      startVal [time (s)] = 1
      text [set every repeat] = $Left
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    TextComponent RightWord
      letterHeight = 0.05
      pos = (0.13, -0.07)
      startVal [time (s)] = 1
      text [set every repeat] = $Right
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    KeyboardComponent Task_response
      allowedKeys = 'a','s','k','l'
      correctAns = $CorrectResp_RH
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = first key
      storeCorrect = True
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    CodeComponent RT_Acc_tracker
      Code Type = Py
      Begin Experiment:
        # Initialize variables for feedback
        response_times = []
        accuracy = []
      End Routine:
        # Append RT and Acc to lists for feedback
        accuracy.append(Task_response.corr)
        if Task_response.corr == 1:
            response_times.append(Task_response.rt)
  Routine Break
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    CodeComponent breakCheck
      Code Type = Py
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      Begin Experiment:
        breakRoutineStart = False
      Begin Routine:
        if not breakRoutineStart:
            continueRoutine = False  # Skip the break if it's not time
      End Routine:
        breakRoutineStart = False
    CodeComponent feedbackCode
      Code Type = Py
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      Begin Experiment:
        import statistics
      Begin Routine:
        feedbackMsg = 'fb_msg_init'
        if breakRoutineStart:
            # Compute averages for the previous block
            if accuracy == []:
                feedbackMsg = "End of this block \n \n NO RESPONSES RECORDED!"
            elif response_times == []:
                mean_acc = statistics.mean(accuracy)
                feedbackMsg = "End of this block \n \n" + "No correct responses\n" + "Press SPACE to continue"
            else:
                mean_rt = statistics.mean(response_times)
                mean_acc = statistics.mean(accuracy)
                feedbackMsg = "End of this block \n \n" + "Average response time: " + str(round(mean_rt, 2)) + " seconds \n" + "Press SPACE to continue"
    TextComponent breakText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $feedbackMsg
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    KeyboardComponent breakEndKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome
  Routine Fixation
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = SemSimJudg_all_stim.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Condition': 'concrete', 'Target': 'telescope', 'Left': 'binoculars', 'Right': 'microscope', 'CorrectResp_RH': 'k', 'CorrectResp_LH': 'a'},
      {'Condition': 'concrete', 'Target': 'wallet', 'Left': 'purse', 'Right': 'pocket', 'CorrectResp_RH': 'k', 'CorrectResp_LH': 'a'},
      {'Condition': 'concrete', 'Target': 'tractor', 'Left': 'wagon', 'Right': 'scooter', 'CorrectResp_RH': 'k', 'CorrectResp_LH': 'a'},
      {'Condition': 'concrete', 'Target': 'helmet', 'Left': 'armor', 'Right': 'shield', 'CorrectResp_RH': 'k', 'CorrectResp_LH': 'a'},
      {'Condition': 'concrete', 'Target': 'pumpkin', 'Left': 'squash', 'Right': 'orange', 'CorrectResp_RH': 'k', 'CorrectResp_LH': 'a'},
      {'Condition': 'concrete', 'Target': 'mirror', 'Left': 'window', 'Right': 'curtain', 'CorrectResp_RH': 'k', 'CorrectResp_LH': 'a'},
      {'Condition': 'concrete', 'Target': 'blazer', 'Left': 'jacket', 'Right': 'sweater', 'CorrectResp_RH': 'k', 'CorrectResp_LH': 'a'},
      {'Condition': 'concrete', 'Target': 'gorilla', 'Left': 'bear', 'Right': 'bobcat', 'CorrectResp_RH': 'k', 'CorrectResp_LH': 'a'},
      {'Condition': 'concrete', 'Target': 'candle', 'Left': 'lantern', 'Right': 'lamp', 'CorrectResp_RH': 'k', 'CorrectResp_LH': 'a'},
      {'Condition': 'concrete', 'Target': 'butter', 'Left': 'ketchup', 'Right': 'carrot', 'CorrectResp_RH': 'k', 'CorrectResp_LH': 'a'},
      {'Condition': 'concrete', 'Target': 'river', 'Left': 'lake', 'Right': 'ocean', 'CorrectResp_RH': 'k', 'CorrectResp_LH': 'a'}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
    Routine Priming
    Routine Break
    Routine Fixation2
  LoopTerminator trials
  Routine Thank_You
